PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1536, 864]
  expName = stroop
  keyboardBackend = ioHub
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine instrucciones_generales
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    TextComponent texto_instrucciones
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text [set every repeat]:
        Durante esta tarea, verás palabras o cadenas de letras presentadas en distintos colores.
        Tu tarea es indicar el color de la tinta, ignorando el significado de la palabra.

        Responde usando las siguientes teclas:
        ↑  para ROJO
        ↓  para AZUL
        ←  para VERDE
        →  para AMARILLO

        Habrá una leyenda visible en pantalla que te recordará estas asociaciones.

        Intenta responder lo más rápido y correctamente posible.
        Si no respondes dentro de 2500 ms, se contará como omisión.

        Presiona espacio para ir al bloque de practica.
    KeyboardComponent key_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones_especificas
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    TextComponent texto_instrucciones_c
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text [set every repeat]:
        En este bloque verás figuras como “XXXX” presentadas en diferentes colores.
        Tu tarea es indicar el color de la tinta lo más rápido y correctamente posible.

        Usa las siguientes teclas:
        ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO

        Recuerda que la leyenda estará visible durante toda la tarea.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_next_c
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine leer_config
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        rt_max = 2500
        rt_min = 200
        isi = 3000
        iti_base = 500
        duracion_max_ensayo = 2500
        num_ensayos_practica = 5
        num_ensayos_C = 36
        num_ensayos_PC = 36
        mostrar_leyenda = True
        feedback_practica = True
        feedback_experimental = False
        restringir_color_repetido = True
        estimulo_control = "XXXX"
        colores = ["rojo", "azul", "verde", "amarillo"]
        palabras_color = ["ROJO", "AZUL", "VERDE", "AMARILLO"]
  Routine ITI_inicial
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    PolygonComponent cruz
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ensayo_practica_c
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    TextComponent texto_estimulo_ensayo_C
      color [set every repeat] = $color_tinta
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $palabra
      units = height
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    KeyboardComponent respuesta_teclado_ensayo_C
      allowedKeys = 'up','down','left','right'
      correctAns = $tecla_correcta
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    PolygonComponent CRUZ_ensayo_C
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
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    CodeComponent Code_ensayo_C
      Code Type = Auto->JS
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      Begin Routine:
        # Inicialización de variables
        respuesta_registrada = False
        tiempo_respuesta = None
        inicio_ensayo = globalClock.getTime()

        # Mostrar el estímulo y ocultar la cruz al comienzo
        texto_estimulo_ensayo_C.setAutoDraw(True)
        feedback_text_C.setAutoDraw(False)
      Each Frame:
        tiempo_actual = globalClock.getTime() - inicio_ensayo

        if respuesta_teclado_ensayo_C.keys and not respuesta_registrada:
            respuesta_registrada = True
            tiempo_respuesta = tiempo_actual
            texto_estimulo_ensayo_C.setAutoDraw(False)
            feedback_text_C.setAutoDraw(True)
            if respuesta_teclado_ensayo_C.corr == 1:
                feedback_text_C.text = '✔'
                feedback_text_C.color = 'green'
            else:
                feedback_text_C.text = '✖'
                feedback_text_C.color = 'red'
            respuesta_teclado_ensayo_C.status = FINISHED

        elif tiempo_actual >= 2.5 and not respuesta_registrada:
            respuesta_registrada = True
            texto_estimulo_ensayo_C.setAutoDraw(False)
            feedback_text_C.setAutoDraw(True)
            if respuesta_teclado_ensayo_C.corr == 1:
                feedback_text_C.text = '✔'
                feedback_text_C.color = 'green'
            else:
                feedback_text_C.text = '✖'
                feedback_text_C.color = 'red'
            respuesta_teclado_C.status = FINISHED

        elif tiempo_actual >= 3.0:
            continueRoutine = False
      End Routine:
        # Clasificación de la validez
        if tiempo_respuesta:
            if tiempo_respuesta < 0.2:
                validez = 'anticipada'
                respuesta_teclado_ensayo_C.corr = 0  # Forzar como incorrecta
            else:
                validez = 'valida'
        else:
            validez = 'omitida'

        # Guardar validez
        thisExp.addData('validez', validez)
        feedback_text_C.setAutoDraw(False)

        # Guardar datos
        thisExp.addData('RT', tiempo_respuesta if tiempo_respuesta else 'NA')
        thisExp.addData('key', respuesta_teclado_ensayo_C.keys)
    TextComponent feedback_text_C
      letterHeight = 0.1
      startVal [condition] = False
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  Routine condicion_c
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    TextComponent texto_estimulo_C
      color [set every repeat] = $color_tinta
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $palabra
      units = height
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    KeyboardComponent respuesta_teclado_C
      allowedKeys = 'up','down','left','right'
      correctAns = $tecla_correcta
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    PolygonComponent CRUZ_C
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = False
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    CodeComponent Code_C
      Code Type = Auto->JS
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      Begin Routine:
        # Inicialización de variables
        respuesta_registrada = False
        tiempo_respuesta = None
        inicio_ensayo = globalClock.getTime()

        # Mostrar el estímulo y ocultar la cruz al comienzo
        texto_estimulo_C.setAutoDraw(True)
        CRUZ_C.setAutoDraw(False)
      Each Frame:
        tiempo_actual = globalClock.getTime() - inicio_ensayo

        # Si responde antes del límite
        if respuesta_teclado_C.keys and not respuesta_registrada:
            respuesta_registrada = True
            tiempo_respuesta = tiempo_actual
            texto_estimulo_C.setAutoDraw(False)
            CRUZ_C.setAutoDraw(True)
            respuesta_teclado_C.status = FINISHED

        # Si no respondió y se agotaron los 2.5 s
        elif tiempo_actual >= 2.5 and not respuesta_registrada:
            respuesta_registrada = True
            texto_estimulo_C.setAutoDraw(False)
            CRUZ_C.setAutoDraw(True)
            respuesta_teclado_C.status = FINISHED
        # Terminar rutina al llegar a 3.0 s exactos
        elif tiempo_actual >= 3.0:
            continueRoutine = False
      End Routine:
        # Clasificación de la validez
        if tiempo_respuesta:
            if tiempo_respuesta < 0.2:
                validez = 'anticipada'
                respuesta_teclado_C.corr = 0  # Forzar como incorrecta
            else:
                validez = 'valida'
        else:
            validez = 'omitida'

        # Guardar validez
        thisExp.addData('validez', validez)
        CRUZ_C.setAutoDraw(False)

        # Guardar datos
        thisExp.addData('RT', tiempo_respuesta if tiempo_respuesta else 'NA')
        thisExp.addData('key', respuesta_teclado_C.keys)
  Routine frame
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0001
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Flow
  Routine instrucciones_generales
  Routine instrucciones_especificas
  Routine ITI_inicial
  LoopInitiator practica_c loopType="TrialHandler"
    conditionsFile = conditions/practica_C.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'red'), ('tecla_correcta', 'up')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'blue'), ('tecla_correcta', 'down')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'green'), ('tecla_correcta', 'left')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'yellow'), ('tecla_correcta', 'right')])]
    Routine ensayo_practica_c
  LoopTerminator practica_c
  Routine instrucciones_especificas
  Routine ITI_inicial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/practica_C.csv
    loopType = random
    nReps = 9
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    conditions:
      [OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'red'), ('tecla_correcta', 'up')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'blue'), ('tecla_correcta', 'down')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'green'), ('tecla_correcta', 'left')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'yellow'), ('tecla_correcta', 'right')])]
    Routine condicion_c
  LoopTerminator trials
  Routine instrucciones_especificas
