PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1536, 864]
  color = 0, 0, 0
  expName = stroop
  keyboardBackend = ioHub
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine instrucciones_generales
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    TextComponent texto_instrucciones
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text [set every repeat]:
        Durante esta tarea, verás palabras o cadenas de letras presentadas en distintos colores.
        Tu tarea es indicar el color de la tinta, ignorando el significado de la palabra.

        Responde usando las siguientes teclas:
        ↑  para ROJO
        ↓  para AZUL
        ←  para VERDE
        →  para AMARILLO

        Habrá una leyenda visible en pantalla que te recordará estas asociaciones.

        Intenta responder lo más rápido y correctamente posible.
        Si no respondes dentro de 2500 ms, se contará como omisión.

        Presiona espacio para ir al bloque de practica.
    KeyboardComponent key_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones_especificas
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    TextComponent texto_instrucciones_c
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text [set every repeat]:
        En este bloque verás figuras como “XXXX” presentadas en diferentes colores.
        Tu tarea es indicar el color de la tinta lo más rápido y correctamente posible.

        Usa las siguientes teclas:
        ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO

        Recuerda que la leyenda estará visible durante toda la tarea.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_next_c
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_inicial
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    PolygonComponent cruz
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent leyenda
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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  Routine ensayo_practica_c
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    TextComponent texto_estimulo_ensayo_C
      color [set every repeat] = $color_tinta
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $palabra
      units = height
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    KeyboardComponent respuesta_teclado_ensayo_C
      allowedKeys = 'up','down','left','right'
      correctAns = $tecla_correcta
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    PolygonComponent CRUZ_ensayo_C
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
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    CodeComponent Code_ensayo_C
      Code Type = Auto->JS
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      Begin Routine:
        # Inicialización de variables
        respuesta_registrada = False
        tiempo_respuesta = None
        inicio_ensayo = globalClock.getTime()

        # Mostrar el estímulo y ocultar la cruz al comienzo
        texto_estimulo_ensayo_C.setAutoDraw(True)
        feedback_text_C.setAutoDraw(False)
      Each Frame:
        tiempo_actual = globalClock.getTime() - inicio_ensayo

        if respuesta_teclado_ensayo_C.keys and not respuesta_registrada:
            respuesta_registrada = True
            tiempo_respuesta = tiempo_actual
            texto_estimulo_ensayo_C.setAutoDraw(False)
            feedback_text_C.setAutoDraw(True)
            if respuesta_teclado_ensayo_C.corr == 1:
                feedback_text_C.text = '✔'
                feedback_text_C.color = 'green'
            else:
                feedback_text_C.text = '✖'
                feedback_text_C.color = 'red'
            respuesta_teclado_ensayo_C.status = FINISHED

        elif tiempo_actual >= 2.5 and not respuesta_registrada:
            respuesta_registrada = True
            texto_estimulo_ensayo_C.setAutoDraw(False)
            feedback_text_C.setAutoDraw(True)
            if respuesta_teclado_ensayo_C.corr == 1:
                feedback_text_C.text = '✔'
                feedback_text_C.color = 'green'
            else:
                feedback_text_C.text = '✖'
                feedback_text_C.color = 'red'
            respuesta_teclado_C.status = FINISHED

        elif tiempo_actual >= 3.0:
            continueRoutine = False
      End Routine:
        # Clasificación de la validez
        if tiempo_respuesta:
            if tiempo_respuesta < 0.2:
                validez = 'anticipada'
                respuesta_teclado_ensayo_C.corr = 0  # Forzar como incorrecta
            else:
                validez = 'valida'
        else:
            validez = 'omitida'

        # Guardar validez
        thisExp.addData('validez', validez)
        feedback_text_C.setAutoDraw(False)

        # Guardar datos
        thisExp.addData('RT', tiempo_respuesta if tiempo_respuesta else 'NA')
        thisExp.addData('key', respuesta_teclado_ensayo_C.keys)
    TextComponent feedback_text_C
      letterHeight = 0.1
      startVal [condition] = False
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    TextComponent leyenda_2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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  Routine condicion_c
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    TextComponent texto_estimulo_C
      color [set every repeat] = $color_tinta
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $palabra
      units = height
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    KeyboardComponent respuesta_teclado_C
      allowedKeys = 'up','down','left','right'
      correctAns = $tecla_correcta
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    PolygonComponent CRUZ_C
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = False
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    CodeComponent Code_C
      Code Type = Auto->JS
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      Begin Routine:
        # Inicialización de variables
        respuesta_registrada = False
        tiempo_respuesta = None
        inicio_ensayo = globalClock.getTime()

        # Mostrar el estímulo y ocultar la cruz al comienzo
        texto_estimulo_C.setAutoDraw(True)
        CRUZ_C.setAutoDraw(False)
      Each Frame:
        tiempo_actual = globalClock.getTime() - inicio_ensayo

        # Si responde antes del límite
        if respuesta_teclado_C.keys and not respuesta_registrada:
            respuesta_registrada = True
            tiempo_respuesta = tiempo_actual
            texto_estimulo_C.setAutoDraw(False)
            CRUZ_C.setAutoDraw(True)
            respuesta_teclado_C.status = FINISHED

        # Si no respondió y se agotaron los 2.5 s
        elif tiempo_actual >= 2.5 and not respuesta_registrada:
            respuesta_registrada = True
            texto_estimulo_C.setAutoDraw(False)
            CRUZ_C.setAutoDraw(True)
            respuesta_teclado_C.status = FINISHED
        # Terminar rutina al llegar a 3.0 s exactos
        elif tiempo_actual >= 3.0:
            continueRoutine = False
      End Routine:
        # Clasificación de la validez
        if tiempo_respuesta:
            if tiempo_respuesta < 0.2:
                validez = 'anticipada'
                respuesta_teclado_C.corr = 0  # Forzar como incorrecta
            else:
                validez = 'valida'
        else:
            validez = 'omitida'

        # Guardar validez
        thisExp.addData('validez', validez)
        CRUZ_C.setAutoDraw(False)

        # Guardar datos
        thisExp.addData('RT', tiempo_respuesta if tiempo_respuesta else 'NA')
        thisExp.addData('key', respuesta_teclado_C.keys)
    TextComponent leyenda_5
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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  Routine ensayo_practica_PC
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    TextComponent texto_estimulo_ensayo_PC
      color [set every repeat] = $color_tinta
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $palabra
      units = height
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    KeyboardComponent respuesta_teclado_ensayo_PC
      allowedKeys = 'up','down','left','right'
      correctAns = $tecla_correcta
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    PolygonComponent CRUZ_ensayo_PC
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
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    CodeComponent Code_ensayo_PC
      Code Type = Auto->JS
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      Begin Routine:
        # Inicialización de variables
        respuesta_registrada = False
        tiempo_respuesta = None
        inicio_ensayo = globalClock.getTime()

        # Mostrar el estímulo y ocultar la cruz al comienzo
        texto_estimulo_ensayo_PC.setAutoDraw(True)
        feedback_text_PC.setAutoDraw(False)
      Each Frame:
        tiempo_actual = globalClock.getTime() - inicio_ensayo

        if respuesta_teclado_ensayo_PC.keys and not respuesta_registrada:
            respuesta_registrada = True
            tiempo_respuesta = tiempo_actual
            texto_estimulo_ensayo_PC.setAutoDraw(False)
            feedback_text_PC.setAutoDraw(True)
            if respuesta_teclado_ensayo_PC.corr == 1:
                feedback_text_PC.text = '✔'
                feedback_text_PC.color = 'green'
            else:
                feedback_text_PC.text = '✖'
                feedback_text_PC.color = 'red'
            respuesta_teclado_ensayo_PC.status = FINISHED

        elif tiempo_actual >= 2.5 and not respuesta_registrada:
            respuesta_registrada = True
            texto_estimulo_ensayo_PC.setAutoDraw(False)
            feedback_text_PC.setAutoDraw(True)
            if respuesta_teclado_ensayo_PC.corr == 1:
                feedback_text_PC.text = '✔'
                feedback_text_PC.color = 'green'
            else:
                feedback_text_PC.text = '✖'
                feedback_text_PC.color = 'red'
            respuesta_teclado_ensayo_PC.status = FINISHED

        elif tiempo_actual >= 3.0:
            continueRoutine = False
      End Routine:
        # Clasificación de la validez
        if tiempo_respuesta:
            if tiempo_respuesta < 0.2:
                validez = 'anticipada'
                respuesta_teclado_ensayo_PC.corr = 0  # Forzar como incorrecta
            else:
                validez = 'valida'
        else:
            validez = 'omitida'

        # Guardar validez
        thisExp.addData('validez', validez)
        feedback_text_PC.setAutoDraw(False)

        # Guardar datos
        thisExp.addData('RT', tiempo_respuesta if tiempo_respuesta else 'NA')
        thisExp.addData('key', respuesta_teclado_ensayo_PC.keys)
    TextComponent feedback_text_PC
      letterHeight = 0.1
      startVal [condition] = False
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    TextComponent leyenda_6
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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  Routine a
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        colores = ['rojo'] * 9 + ['azul'] * 9 + ['verde'] * 9 + ['amarillo'] * 9
        lista_colores = []
        intento = 0

        while intento < 1000:
            intento += 1
            temp = colores[:]

            # Shuffle manual sin imports
            for i in range(len(temp)-1, 0, -1):
                j = int(random() * (i + 1))
                temp[i], temp[j] = temp[j], temp[i]

            repetido = False
            i = 0
            while i < len(temp) - 1:
                if temp[i] == temp[i + 1]:
                    repetido = True
                    break
                i += 1

            if not repetido:
                lista_colores = temp
                break
  Routine condicion_PC
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    TextComponent texto_estimulo_PC
      color [set every repeat] = $color_tinta
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $palabra
      units = height
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    KeyboardComponent respuesta_teclado_PC
      allowedKeys = 'up','down','left','right'
      correctAns = $tecla_correcta
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    PolygonComponent CRUZ_PC
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = False
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    CodeComponent Code_PC
      Code Type = Auto->JS
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      Begin Routine:
        # Inicialización de variables
        respuesta_registrada = False
        tiempo_respuesta = None
        inicio_ensayo = globalClock.getTime()

        # Mostrar el estímulo y ocultar la cruz al comienzo
        texto_estimulo_PC.setAutoDraw(True)
        CRUZ_PC.setAutoDraw(False)
      Each Frame:
        tiempo_actual = globalClock.getTime() - inicio_ensayo

        # Si responde antes del límite
        if respuesta_teclado_PC.keys and not respuesta_registrada:
            respuesta_registrada = True
            tiempo_respuesta = tiempo_actual
            texto_estimulo_PC.setAutoDraw(False)
            CRUZ_PC.setAutoDraw(True)
            respuesta_teclado_PC.status = FINISHED

        # Si no respondió y se agotaron los 2.5 s
        elif tiempo_actual >= 2.5 and not respuesta_registrada:
            respuesta_registrada = True
            texto_estimulo_PC.setAutoDraw(False)
            CRUZ_PC.setAutoDraw(True)
            respuesta_teclado_PC.status = FINISHED
        # Terminar rutina al llegar a 3.0 s exactos
        elif tiempo_actual >= 3.0:
            continueRoutine = False
      End Routine:
        # Clasificación de la validez
        if tiempo_respuesta:
            if tiempo_respuesta < 0.2:
                validez = 'anticipada'
                respuesta_teclado_PC.corr = 0  # Forzar como incorrecta
            else:
                validez = 'valida'
        else:
            validez = 'omitida'

        # Guardar validez
        thisExp.addData('validez', validez)
        CRUZ_PC.setAutoDraw(False)

        # Guardar datos
        thisExp.addData('RT', tiempo_respuesta if tiempo_respuesta else 'NA')
        thisExp.addData('key', respuesta_teclado_PC.keys)
    TextComponent leyenda_8
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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  Routine ITI_y_datos_C
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    PolygonComponent cruz_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent setup_c
      Code Type = Auto->JS
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      Begin Experiment:
        archivo_csv_C = "conditions/C/orden_c_p" + expInfo['participant'] + ".csv"
    TextComponent leyenda_4
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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  Routine ITI_y_datos_PC
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    PolygonComponent cruz_3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent setup_pc
      Code Type = Auto->JS
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      Begin Experiment:
        archivo_csv_PC = "conditions/PC/orden_pc_p" + expInfo['participant'] + ".csv"
    TextComponent leyenda_7
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ↑ = ROJO   ↓ = AZUL   ← = VERDE   → = AMARILLO
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Flow
  Routine instrucciones_generales
  Routine instrucciones_especificas
  Routine ITI_inicial
  LoopInitiator practica_c loopType="TrialHandler"
    conditionsFile = conditions/practica/practica_C.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'red'), ('tecla_correcta', 'up')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'blue'), ('tecla_correcta', 'down')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'green'), ('tecla_correcta', 'left')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'yellow'), ('tecla_correcta', 'right')])]
    Routine ensayo_practica_c
  LoopTerminator practica_c
  Routine instrucciones_especificas
  Routine ITI_y_datos_C
  LoopInitiator condicion_C loopType="TrialHandler"
    conditionsFile = $archivo_csv_C
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'red'), ('tecla_correcta', 'up')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'blue'), ('tecla_correcta', 'down')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'green'), ('tecla_correcta', 'left')]),
      OrderedDict([('palabra', 'XXXX'), ('color_tinta', 'yellow'), ('tecla_correcta', 'right')])]
    Routine condicion_c
  LoopTerminator condicion_C
  Routine instrucciones_especificas
  Routine ITI_inicial
  LoopInitiator practica_PC loopType="TrialHandler"
    conditionsFile = conditions/practica/practica_PC.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('palabra', 'AZUL'), ('color_tinta', 'red'), ('tecla_correcta', 'up')]),
      OrderedDict([('palabra', 'VERDE'), ('color_tinta', 'blue'), ('tecla_correcta', 'down')]),
      OrderedDict([('palabra', 'AMARILLO'), ('color_tinta', 'green'), ('tecla_correcta', 'left')]),
      OrderedDict([('palabra', 'ROJO'), ('color_tinta', 'yellow'), ('tecla_correcta', 'right')])]
    Routine ensayo_practica_PC
  LoopTerminator practica_PC
  Routine instrucciones_especificas
  Routine ITI_y_datos_PC
  LoopInitiator loop_condicion_PC loopType="TrialHandler"
    conditionsFile = $archivo_csv_PC
    loopType = sequential
    nReps = 1
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    Routine condicion_PC
  LoopTerminator loop_condicion_PC
